PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = u'bounceV1/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.2.4
  Window size (pixels) = [1920, 1080]
  expName = bounceV3
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine trial
    CodeComponent trialJSCode
      Code Type = JS
      Each JS Frame:
        screen_width = window.innerWidth;
        screen_height = window.innerHeight

        if (screen_width > screen_height) {
            cursorPosX = trialMouse.getPos()[0] * (screen_height / screen_width);
        } else {
            cursorPosX = trialMouse.getPos()[0];
        }
    CodeComponent trialCode
      Code Type = Auto->JS
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      Begin Routine:
        # controls paddle positioning
        homeX = -1.0
        homeY = -0.3

        # don't touch
        bounceDir = 0
        wallBounceX = 0
        wallBounceY = 0
        frameCounter = 0
        bounceCounter = 0
        connectCounter = 0

        trialPoints.text = "Points: " + str(pointsCounter)
        trialHits.text = "Hits: " + str(hitCounter) + " / " + str(trialsNum)
        trialRepeat.text = "Block " + str(tasksNum) + " / " + str(taskReps)

        # angle info
        perturbation = [(pi/20)*2]
        # alpha = [70, 75, 80, 85]
        if (trialType == 1):
            if horOrTilt == 1 and tasksNum >= 5:
                trialWall.ori = 0
            elif horOrTilt == 2 and bouncePointChoice == 0 and tasksNum >= 5:
                trialWall.ori = 9
            elif horOrTilt == 2 and bouncePointChoice == 1 and tasksNum >= 5:
                trialWall.ori = 351
        #else:
        #    if horOrTilt == 1 and tasksNum <= 2:
        #        trialWall.ori = 0
        #    elif horOrTilt == 1 and tasksNum == 3 and bouncePointChoice == 0:
        #        trialWall.ori = 9
        #    elif horOrTilt == 1 and tasksNum == 3 and bouncePointChoice == 1:
        #        trialWall.ori = 351
        #    elif horOrTilt == 2 and tasksNum <= 2 and bouncePointChoice == 0:
        #        trialWall.ori = 9
        #   elif horOrTilt == 2 and tasksNum <= 2 and bouncePointChoice == 1:
        #        trialWall.ori = 351
        #    elif horOrTilt == 2 and tasksNum == 3:
        #        trialWall.ori = 0
        #    else:
        #        trialWall.ori = 0
        else:
            if horOrTilt == 1:
                trialWall.ori = 0
            elif horOrTilt == 2 and bouncePointChoice == 1:
                trialWall.ori = 351
            elif horOrTilt == 2 and bouncePointChoice == 0:
                trialWall.ori = 9

        #if tasksNum >= 5 and trialType == 1:
        #    pertChoice = perturbation[0]
        #elif tasksNum <= 3 and trialType != 1:
        #    pertChoice = perturbation[0]
        #else:

        pertChoice = perturbation[0]

        if bouncePointChoice == 0:
            # randint max should equal len(alpha)
            alphaChoice = alpha[trialsNum]
            choice90 = 90
            choice180 = 180
        else:
            alphaChoice = -(alpha[trialsNum])
            choice90 = -90
            choice180 = -180
            pertChoice = -(pertChoice)

        theta = (pi * (0 / 180))
        cosTheta = cos(theta)
        sinTheta = sin(theta)

        alphaRad = pi * (alphaChoice/180)
        tanAlpha = tan(alphaRad)

        betaChoice = choice180 - (choice90 + alphaChoice)
        betaRad = pi * (betaChoice/180)
        tanBeta = tan(betaRad + pertChoice)

        # X bounce point is always 0.0
        bouncePointX = 0.0
        # Y bounce point is always 0.3
        bouncePointY = 0.3
        launchLineX = 0.6/(tanAlpha)
        # Y launch line is always 0.6
        launchLineY = 0.6
        bouncePathX = bouncePointX - launchLineX
        # Y starting position is always -0.5
        bouncePathY = -0.3

        launchLineXP = 0.6 * tanBeta

        # arrays to store info
        bounceDirArr = []
        ballPosX = []
        ballPosY = []
        paddlePosX = []
        paddlePosY = []

        # other things to keep track of
        trialsNum = trialsNum + 1
        hitOrMiss = "miss"

        # values to change for paddle size
        paddleX = 0.05
        paddleY = 0.0125
        trialCursor.vertices = [(-paddleX,-paddleY),(-paddleX,paddleY),(paddleX,paddleY),(paddleX,-paddleY)]
        # values to change for wall size
        wallX = 0.5
        wallY = 0.0125
        trialWall.vertices = [(-wallX,-wallY),(-wallX,wallY),(wallX,wallY),(wallX,-wallY)]

        # initial calculations for mouse
        cursorPosX = trialMouse.getPos()[0]
        cursorPosY = (sqrt(((trialMouse.getPos()[0] - homeX)**2)+((trialMouse.getPos()[1] - homeY)**2))*(sinTheta) + homeY)
      Each Frame:
        # check to end
        #if tasksNum >= 9:
            #continueRoutine = False
        cursorPosY = (sqrt(((trialMouse.getPos()[0] - homeX)**2)+((trialMouse.getPos()[1] - homeY)**2))*(sinTheta) + homeY)

        bounceDirArr.append(bounceDir)
        ballPosX.append(bouncePathX)
        ballPosY.append(bouncePathY)
        paddlePosX.append(cursorPosX)
        paddlePosY.append(cursorPosY)

        if ((bouncePathX >= cursorPosX - paddleX) and (bouncePathY >= cursorPosY - paddleY) and  (bouncePathX <= cursorPosX + paddleX) and (bouncePathY <= cursorPosY + paddleY)) and (bounceDir == 1):
            hitOrMiss = "hit"
            hitCounter = hitCounter + 1
            ballConnectX = bouncePathX;
            ballConnectY = bouncePathY;
            continueRoutine = False
        elif (bouncePathX <= -1.0) or (bouncePathY <= -1.0) or (bouncePathX >= 1.0) or (bouncePathY >= 1.0):
            hitOrMiss = "miss"
            ballConnectX = bouncePathX;
            ballConnectY = bouncePathY;
            continueRoutine = False

        if (bounceDir == 0):
            bouncePathX = bouncePathX + launchLineX*ballSpeed
            bouncePathY = bouncePathY + launchLineY*ballSpeed
        else:
            bouncePathX = bouncePathX + launchLineXP*ballSpeed
            bouncePathY = bouncePathY - launchLineY*ballSpeed

        if bouncePathY <= -0.29 and (bounceDir == 1) and (trialFlag == 0):
            interceptBall = bouncePathX
            interceptPaddle = cursorPosX
            connectCounter = frameCounter
            trialFlag = 1

        if (bouncePathY >= bouncePointY) and (bounceDir == 0):
            bounceDir = 1
            bounceCounter = frameCounter
            wallBounceX = bouncePathX
            wallBounceY = bouncePathY

        frameCounter = frameCounter + 1
      End Routine:
        thisExp.addData('bounceDirArr', bounceDirArr)
        thisExp.addData('ballPosX', ballPosX)
        thisExp.addData('ballPosY', ballPosY)
        thisExp.addData('paddlePosX', paddlePosX)
        thisExp.addData('paddlePosY', paddlePosY)
        thisExp.addData('alphaChoice', alphaChoice)
        pertChoice = (pertChoice/2)*(180/pi)
        thisExp.addData('pertChoice', pertChoice)
        thisExp.addData('horOrTilt', horOrTilt)
        thisExp.addData('hitOrMiss', hitOrMiss)
        thisExp.addData('trialType', trialType)
        thisExp.addData('trialsNum', trialsNum)
        thisExp.addData('tasksNum', tasksNum)
        thisExp.addData('trialRepeat', trialRepeat)
        thisExp.addData('ballSpeed', ballSpeed)
        interceptDelta = interceptBall - interceptPaddle
        thisExp.addData('interceptBall', interceptBall)
        thisExp.addData('interceptPaddle', interceptPaddle)
        thisExp.addData('interceptDelta', interceptDelta)
        thisExp.addData('wallBounceX', wallBounceX)
        thisExp.addData('wallBounceY', wallBounceY)
        if trialWall.ori == 0:
            wallOrient = "hor"
        else:
            wallOrient = "tilt"
        thisExp.addData('wallOrient', wallOrient)
        thisExp.addData('connectTime', trialMouse.time[connectCounter])
        thisExp.addData('bounceTime', trialMouse.time[bounceCounter])
        thisExp.addData('cumulativetime', globalClock.getTime())
    MouseComponent trialMouse
      forceEndRoutineOnPress = any click
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    PolygonComponent trialWall
      fillColor = $[1,1,1]
      pos = (0, 0.3)
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent trialCursor
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      pos [set every frame] = (cursorPosX, cursorPosY)
      shape = regular polygon...
      size = (1.0, 1.0)
      startVal [time (s)] = 0.0
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    PolygonComponent trialCircle
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 180
      pos [set every frame] = (bouncePathX, bouncePathY)
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    TextComponent trialHits
      letterHeight = 0.05
      pos = (0.4, -0.4)
      startVal [time (s)] = 0.0
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    TextComponent trialPoints
      letterHeight = 0.05
      pos = (-0.4, -0.4)
      startVal [time (s)] = 0.0
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    TextComponent trialRepeat
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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    SoundComponent sound_1
      sound = pong.wav
      startVal [time (s)] = $Sound
      stopVal [duration (s)] = 0.5
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  Routine setup
    CodeComponent JSCode
      Code Type = JS
      Begin JS Experiment:
        // Code to fix reference errors in JS
        thisExp = psychoJS.experiment;
        win = psychoJS.window;
        event = psychoJS.eventManager;
        Array.prototype.append = [].push;
        shuffle = util.shuffle;
        document.documentElement.style.cursor = 'none';
        random = Math.random;
        tan = Math.tan;
        randint = function(min, maxplusone) {
          return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }
      Begin JS Routine:
        var sUsrAg
        var nIdx
        getBrowserId = function() {
            var browsers = ["MSIE", "Firefox", "Safari", "Chrome", "Opera"];
            sUsrAg = window.navigator.userAgent,
            nIdx = browsers.length - 1;
            for (nIdx; nIdx > -1 && sUsrAg.indexOf(browsers [nIdx]) === -1; nIdx--);

          return browsers[nIdx];
        }

        psychoJS.experiment.addData("Browser", getBrowserId())
      End JS Experiment:
        var message = "You can now close this tab and return to the questionnaire.";
        document.documentElement.style.cursor = 'auto';
    CodeComponent setupCode
      Code Type = Auto->JS
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      Begin Experiment:
        #horOrTilt = int(expInfo['Group'])
        #trialType = int(expInfo['Day'])
        trialType = 2
        #horOrTilt = 0
        cursorColor = [-1,-1,-1]
        tasksNum = 0
        hitTotal = 0
        hitCounter = 0
        pointsTotal = 0
        pointsCounter = 0
        hitPercent = 2
        trialRepeat = 1
        trialReps = 16
        nConditions = 4
        if (trialType == 1):
            taskReps = 8*nConditions
        else:
            taskReps = 4*nConditions
  Routine instr
    CodeComponent instrCode
      Code Type = Auto->JS
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      Begin Routine:
        if tasksNum > 0:
            hitPercent = hitCounter / trialReps
        # check how many repeated trials
        #if trialRepeat >= 4 and taskNum <= 3:
            #tasksNum = tasksNum + 1
            #trialRepeat = 1
        # check if over 60%
        #if hitPercent >= 0.6 or hitPercent <= 2:
            #tasksNum = tasksNum + 1
            #trialRepeat = 1
        #else:
            #trialRepeat = trialRepeat + 1

        tasksNumLeft = taskReps - tasksNum
        tasksNum = tasksNum + 1

        # initial variables
        trialsType = 0
        trialsNum = 0
        ballConnectX = 1.5
        ballConnectY = 1.5
        hitOrMiss = "null"
        cursorColor = [-1,-1,-1]
        interceptBall = 0
        interceptPaddle = 0
        interceptDelta = 0
        timerCount = 0
        pointsTotal = pointsTotal + pointsCounter
        hitTotal = hitTotal + hitCounter

        instrRepeat.text = "Block " + str(tasksNum) + " / " + str(taskReps)

        # values to change for ball speed
        if (trialType == 1):
            if tasksNum == 1:
                ballSpeed = 0.04
            else:
                ballSpeed = 0.04
        else:
            ballSpeed = 0.04

        #Determines what messages show up
        instrText.text = "Catch the ball for " + str(tasksNumLeft) + " blocks of " + str(trialReps) + " trials. Try your best to use the center of the paddle as it will allow you to get the most points.\nYou can take a short break now and press 'space' when ready to continue."

        if tasksNum == 1:
            instrStats.text = ""
        else:
            instrStats.text = "Hits: " + str(hitCounter) + " / " + str(trialReps) + "\nPoints: " + str(pointsCounter)

        # Determines whether trial starts on left or right
        trialArr = []
        for i in range(trialReps):
            if i % 2 == 0:
                trialArr.append(0)
            else:
                trialArr.append(1)

        alpha = []
        for i in range(int(trialReps/3.5)):
            alpha.append(70)
            alpha.append(75)
            alpha.append(80)
            alpha.append(85)

        shuffle(trialArr)
        shuffle(alpha)
      End Routine:
        thisExp.addData('hitPercent', hitPercent)
        hitCounter = 0
        pointsCounter = 0
        hitPercent = 0
    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    TextComponent instrStats
      letterHeight = 0.05
      pos = (0.0, -0.4)
      startVal [time (s)] = 0.0
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    TextComponent instrRepeat
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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    KeyboardComponent instrResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    CodeComponent endCode
      Code Type = Auto->JS
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      Begin Routine:
        endHits.text = "Total Hits: " + str(hitTotal + hitCounter) + " / " + str(tasksNum*trialReps)
        endPoints.text = "Total Points: " + str(pointsTotal + pointsCounter)
    TextComponent endText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the end of the experiment, thank you for your time.

        DO NOT close this tab just yet.
        Press ‘space’ and wait until the message box turns green to exit (it can take a few minutes) and return to the questionnaire.
    TextComponent endHits
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
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    TextComponent endPoints
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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    KeyboardComponent endResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fix
    CodeComponent fixJSCode
      Code Type = JS
      Each JS Frame:
        screen_width = window.innerWidth;
        screen_height = window.innerHeight

        if (screen_width > screen_height) {
            cursorPosX = trialMouse.getPos()[0] * (screen_height / screen_width);
        } else {
            cursorPosX = trialMouse.getPos()[0];
        }
    CodeComponent fixCode
      Code Type = Auto->JS
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      Begin Routine:
        # initial variables
        bouncePointChoice = trialArr[trialsNum]
        homeX = -1.0
        homeY = -0.3
        trialFlag = 0
        fixFlag = 0
        pointsGiven = 0
        timerCount = 0

        # intial angle control for paddle position
        theta = (pi * (0 / 180))
        sinTheta = sin(theta)

        # paddle variables
        paddleX = 0.05
        paddleY = 0.0125
        fixCursor.vertices = [(-paddleX,-paddleY),(-paddleX,paddleY),(paddleX,paddleY),(paddleX,-paddleY)]
        cursorPosX = 0.0
        cursorPosY = (sqrt(((trialMouse.getPos()[0] - homeX)**2)+((trialMouse.getPos()[1] - homeY)**2))*(sinTheta) + homeY)

        # text control
        if trialsNum == 0:
            feedbackText.text = "Get ready!"
        else:
            feedbackText.text = str(hitOrMiss)

        if bouncePointChoice == 0 and tasksNum == 1:
            fixText.text = "Move left for 1 second to start."
            fixArrow.text = "<="
        elif bouncePointChoice == 1 and tasksNum == 1:
            fixText.text = "Move right for 1 second to start."
            fixArrow.text = "=>"
        elif bouncePointChoice == 0:
            fixText.text = ""
            fixArrow.text = "<="
        else:
            fixText.text = ""
            fixArrow.text = "=>"

        # paddle color and points control
        if hitOrMiss == "hit" and interceptDelta <= 0.025 and interceptDelta >= -0.025 and trialsNum >= 1:
            cursorColor = [-1,1.0,-1]
            pointsCounter = pointsCounter + 10
            pointsGiven = 10
        elif hitOrMiss == "hit" and trialsNum >= 1:
            cursorColor = [1.000,0.004,-1.000]
            pointsCounter = pointsCounter + 5
            pointsGiven = 5
        elif hitOrMiss == "miss" and trialsNum >= 1:
            cursorColor = [1.0,-1,-1]
            pointsGiven = 0
        else:
            cursorColor = [-1.0,-1.0,-1.0]

        # hit/point counters
        fixPoints.text = "Points: " + str(pointsCounter)
        fixHits.text = "Hits: " + str(hitCounter) + " / " + str(trialsNum)

        # markers for edges
        leftEdge = -0.45
        rightEdge = 0.45


        #number of repeats
        fixRepeat.text = "Block " + str(tasksNum) + " / " + str(taskReps)
      Each Frame:
        cursorPosY = (sqrt(((trialMouse.getPos()[0] - homeX)**2)+((trialMouse.getPos()[1] - homeY)**2))*(sinTheta) + homeY)

        if bouncePointChoice == 0:
            if fixMouse.getPos()[0] <= leftEdge:
                timerCount = timerCount + 1
            elif fixMouse.getPos()[0] > leftEdge and timerCount > 0:
                timerCount = timerCount - 1
        else:
            if fixMouse.getPos()[0] >= rightEdge:
                timerCount = timerCount + 1
            elif fixMouse.getPos()[0] < rightEdge and timerCount > 0:
                timerCount = timerCount - 1

        if timerCount >= 120 and trialsNum == 0:
            continueRoutine = False
        elif timerCount >= 60:
            continueRoutine = False

        if fixFlag == 0:
            ballConnectX = ballConnectX + 0.0001
            fixFlag = 1
        else:
            ballConnectX = ballConnectX - 0.0001
            fixFlag = 0
      End Routine:
        thisExp.addData('pointsGiven', pointsGiven)
    MouseComponent fixMouse
      forceEndRoutineOnPress = any click
      newClicksOnly = False
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    PolygonComponent fixCursor
      fillColor [set every repeat] = $cursorColor
      lineColor [set every repeat] = $cursorColor
      pos [set every frame] = (cursorPosX, cursorPosY)
      shape = regular polygon...
      size = (1.0, 1.0)
      startVal [time (s)] = 0.0
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    PolygonComponent fixCircle
      fillColor = $[-1.000,0.004,1.000]
      lineColor = $[-1.000,0.004,1.000]
      nVertices = 180
      pos [set every frame] = (ballConnectX, ballConnectY)
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    TextComponent feedbackText
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent fixText
      letterHeight = 0.05
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
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    TextComponent fixArrow
      letterHeight = 0.15
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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    TextComponent fixPoints
      letterHeight = 0.05
      pos = (-0.4, -0.4)
      startVal [time (s)] = 0.0
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    TextComponent fixHits
      letterHeight = 0.05
      pos = (0.4, -0.4)
      startVal [time (s)] = 0.0
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    TextComponent fixRepeat
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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Flow
  Routine setup
  LoopInitiator SoundOrNot loopType="TrialHandler"
    conditionsFile = loopTemplate1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Sound', 0.4), ('horOrTilt', 1)]),
      OrderedDict([('Sound', 5.0), ('horOrTilt', 1)]),
      OrderedDict([('Sound', 0.4), ('horOrTilt', 2)]),
      OrderedDict([('Sound', 5.0), ('horOrTilt', 2)])]
    LoopInitiator tasks loopType="TrialHandler"
      loopType = sequential
      nReps = taskReps/4
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      Routine instr
      LoopInitiator trials loopType="TrialHandler"
        loopType = random
        nReps = trialReps
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        Routine fix
        Routine trial
      LoopTerminator trials
    LoopTerminator tasks
  LoopTerminator SoundOrNot
  Routine end
